PsychoPy2experiment version="2023.2.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Save hdf5 file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  color = -1.0000, -1.0000, -1.0000
  expName = misophonia_max
  keyboardBackend = ioHub
  logging level = warning
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Routines
  Routine instructions
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    TextComponent intro_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Instructions

        In this experiment, a string of 9 numbers and letters will be diplayed on the screen in a grid. For each number or letter in the string, you must indicate if it is a number or a letter by pressing the 'N' or 'L' keys.

        For example, if the following is displayed on the screen:

        X4F
        BR4
        6S7

        A correct reponse wouild be to press the following sequence of keys on your keyboard: 'L, N, L, L, L, N, N, L, N', one keypress for each letter shown in order.

        As you perform the task, we will play different sounds in the background.

        We will begin with some practice trials with feedback.

        Please press the spacebar to continue.
    KeyboardComponent intro_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine practice
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    CodeComponent code_prac
      Code Type = Py
      Before Experiment:
        import pandas as pd
        import random

        #prefs.hardware['audioLib'] = ['ptb','pygame','pyo']

        #stim set
        chars = ['X','R','T','J','L','P','N','F','B',0,1,2,3,4,5,6,7,8,9]

        ###SETUP BIOPAC SERIAL CONNECTION###
        import serial
        ser = serial.Serial("COM4",115200, timeout=1, bytesize=8, stopbits=1) # This must always be used before sending any triggers, it specifies the settings for the serial port.Exact settings should be customised to your specific port
        ser.open # Open the port
        ser.write('RR'.encode()) # Reset the port so that its ready for the first trigger
        #####################

        # TEST HEX CODES HERE #
        #ser.write('80'.encode()) # channel 28
        #core.wait(0.5)
      Begin Experiment:
        timer = core.CountdownTimer(0) # init timer at 0
        current_sound = {}
        sound_currently_playing = 0
        sound_played_this_trial = 0
        n_prac = 5
        break_switch = 0

        # Load the sound file paths from the CSV file
        sound_df = pd.read_csv("sound_key.csv")#[0:2] #LESS TRIALS FOR TESTING
        sound_dict = sound_df.to_dict('records')
        sound_dict = sound_dict + sound_dict
        no_sound = [{}] * len(sound_dict) #append 50% empty trials
        for e in no_sound:
            sound_dict.append(e)
        random.shuffle(sound_dict) # Shuffle the list of sound file paths so that each sound is randomly ordered
      Begin Routine:
        # Trigger for 'begin practice trials
        if prac_loop.thisN == 0:
            ser.write('01'.encode()) # channel 20
            core.wait(0.0001)
            ser.write('00'.encode())

        #make stim
        random.shuffle(chars)
        chars_tr = chars[0:9]

        #display stim
        chars_disp = ''
        for i, c in enumerate(chars_tr):
            if (i+1) % 3 > 0:
                add_char = '   '
            else:
                add_char = '\n\n'
            chars_disp += str(c) + add_char

        #check if sound currently playing
        if sound_currently_playing == 0:
            sound_played_this_trial = 0
            print('SOUND NOT PLAYING AT TRIAL START')
            key_start = random.randint(2, 5)
        else:
            print('SOUND PLAYING AT TRIAL START')

        #feedback
        fdbk = ''
        toggle = 0

        #sound option 2
        #try:
        #    clip
        #except NameError:
        #    print('no clip yet')
        #else:
        #    print(clip.status)
        #    print(clip._checkPlaybackFinished())
      Each Frame:
        #make double sure only the first 9 presses are being captured: https://discourse.psychopy.org/t/end-routine-after-two-key-presses/2132/6
        if len(key_prac.keys) > 9:
            key_prac.keys = key_prac.keys[0:9]

        #if sound not playing when routine began, and timer is done, and correct number of key presses
        if len(key_prac.keys) == key_start and sound_currently_playing == 0 and sound_played_this_trial == 0:
            current_sound = sound_dict[random.randint(0,len(sound_dict)-1)]
            sound_currently_playing = 1
            sound_played_this_trial = 1
            if current_sound == {}:
                timer = core.CountdownTimer(0)
                ser.write('10'.encode()) # Turn on BIOPAC channel 24
            else:
                clip = sound.Sound(current_sound['filepath'], stereo=True)
                clip.play()
                ###BIOPAC TRIGGERS####
                if current_sound['condition'] == 'misophonic':
                    ser.write('02'.encode()) # Turn on BIOPAC channel 21
                elif current_sound['condition'] == 'neutral':
                    ser.write('04'.encode()) # Turn on BIOPAC channel 22
                elif current_sound['condition'] == 'unpleasant':
                    ser.write('08'.encode()) # Turn on BIOPAC channel 23
                #######################
                timer = core.CountdownTimer(clip.getDuration())

        # Trigger for when sound stops playing
        if timer.getTime() <= 0 and sound_currently_playing == 1 and current_sound != {}: #if audio trial, when timer runs out
            sound_currently_playing = 0
            ser.write('00'.encode())

        #check if keypress is correct
        if len(key_prac.keys) == 0:
            fdbk = ''
        elif (key_prac.keys[-1] == 'n' and type(chars[len(key_prac.keys)-1]) == int) or (key_prac.keys[-1] == 'l' and type(chars[len(key_prac.keys)-1]) == str):
            fdbk = 'Correct'
        else:
            fdbk = 'Incorrect'

        # if total number of key presses reached, display last press for a frame and move on
        # or: https://psychopy.org/_modules/psychopy/session.html
        if len(key_prac.keys) == 9:
            if toggle == 0: #needs an extra frame to render feedback on last button press
                toggle = 1
            else:
                core.wait(.5) #show feedback for half a second
                continueRoutine = False #end routine
      End Experiment:
        ser.write('RR'.encode()) #reset trigger signal
        ser.close
      End Routine:
        if current_sound == {}:
            sound_currently_playing = 0
            ser.write('00'.encode())

        # end practice loop
        if prac_loop.thisN+1 == n_prac:
            if timer.getTime() > 0: #stop any sound being played
                clip.stop()
                timer = core.CountdownTimer(0)
            sound_currently_playing = 0
            sound_played_this_trial = 0
            ser.write('00'.encode()) #reset trigger signal
    TextComponent stim_prac
      font = Monaco
      letterHeight = 0.1
      pos = (0, -.1)
      startVal [time (s)] = 1
      text [set every repeat] = $chars_disp
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    TextComponent feedback
      letterHeight = 0.05
      pos = (0, -.4)
      startVal [time (s)] = 1
      text [set every frame] = $fdbk
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    KeyboardComponent key_prac
      allowedKeys = 'l','n'
      forceEndRoutine = False
      startVal [time (s)] = 1
      store = all keys
      storeCorrect = True
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    TextComponent fix_prac
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine end_prac
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    TextComponent end_prac_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        The practice trails have ended and we will now start the main task. It will take around 25 minutes.

        Please press the spacebar to continue.
    KeyboardComponent end_prac_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        # Trigger for 'begin experimental trials'
        if trials.thisN == 0:
            ser.write('01'.encode())
            core.wait(0.0001)
            ser.write('00'.encode())

        #make stim
        random.shuffle(chars)
        chars_tr = chars[0:9]
        thisExp.addData('stim',chars_tr)

        #display stim
        chars_disp = ''
        for i, c in enumerate(chars_tr):
            if (i+1) % 3 > 0:
                add_char = '   '
            else:
                add_char = '\n\n'
            chars_disp += str(c) + add_char

        #get key press number to start sound on
        if sound_currently_playing == 0:
            print('SOUND NOT PLAYING AT TRIAL START')
            sound_played_this_trial = 0
            key_start = random.randint(2, 5)
            thisExp.addData('key_start',key_start)
        else:
            print('SOUND PLAYING AT TRIAL START')
            thisExp.addData('sound','previous_trial')

        # if restarting after the break
        if break_switch == 1: #sound_df is original dataset, 1/4 the amount of trials
            break_switch = 0
            ser.write('01'.encode()) # blip for break end
            core.wait(0.0001)
            ser.write('00'.encode())
      Each Frame:
        #make double sure only the first 9 presses are being captured: https://discourse.psychopy.org/t/end-routine-after-two-key-presses/2132/6
        if len(key_resp.keys) > 9:
            key_resp.keys = key_resp.keys[0:9]

        #if sound not playing when routine began, and correct number of key presses
        if len(key_resp.keys) == key_start and sound_currently_playing == 0 and sound_played_this_trial == 0:
            current_sound = sound_dict.pop()
            sound_currently_playing = 1
            sound_played_this_trial = 1
            if current_sound == {}:
                timer = core.CountdownTimer(0)
                ser.write('10'.encode()) # Turn on BIOPAC channel 24
                # Add data
                thisExp.addData('sound','silent_trial')
            else:
                clip = sound.Sound(current_sound['filepath'], stereo=True)
                clip.play()
                ###BIOPAC TRIGGERS####
                if current_sound['condition'] == 'misophonic':
                    ser.write('02'.encode()) # Turn on BIOPAC channel 21
                elif current_sound['condition'] == 'neutral':
                    ser.write('04'.encode()) # Turn on BIOPAC channel 22
                elif current_sound['condition'] == 'unpleasant':
                    ser.write('08'.encode()) # Turn on BIOPAC channel 23
                #######################
                timer = core.CountdownTimer(clip.getDuration())
                # Add data
                thisExp.addData('sound',current_sound['filepath'])
                thisExp.addData('condition',current_sound['condition'])
                thisExp.addData('sound_started',core.getTime())
                thisExp.addData('sound_duration',clip.duration)
                thisExp.addData('sound_end',core.getTime()+clip.duration)

        if timer.getTime() <= 0 and sound_currently_playing == 1 and current_sound != {}: #if audio trial, when timer runs out
            ser.write('00'.encode())
            sound_currently_playing = 0

        # if 9th key press either next trial or end exp
        if len(key_resp.keys) == 9:
            if len(sound_dict) == 0 and timer.getTime() <= 0:
                trials.finished = True
                # Trigger for 'end experimental trials'
                ser.write('01'.encode())
                core.wait(0.0001)
                ser.write('00'.encode())
            continueRoutine = False
      End Routine:
        if current_sound == {}:
            sound_currently_playing = 0
            ser.write('00'.encode())

        # store accuracy
        correct = []
        for i, c in enumerate(chars[0:9]):
            if (str(c).isnumeric() and key_resp.keys[i]=='n') or (str(c).isnumeric()==False and key_resp.keys[i]=='l'):
                key_resp.corr += 1
                correct.append(True)
            else:
                correct.append(False)
        thisExp.addData("correct_trials", correct)

        # Present break screen
        if len(sound_dict) == len(sound_df)*2 and sound_currently_playing == 0: #sound_df is original dataset, 1/4 the amount of trials
            break_switch = 1
            ser.write('01'.encode()) # blip for break start
            core.wait(0.0001)
            ser.write('00'.encode())
    TextComponent stim
      font = monaco
      letterHeight = 0.1
      pos = (0, -.1)
      startVal [time (s)] = 1
      text [set every repeat] = $chars_disp
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    KeyboardComponent key_resp
      allowedKeys = 'l','n'
      forceEndRoutine = False
      startVal [time (s)] = 1
      store = all keys
      storeCorrect = True
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    TextComponent fix
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine break_screen
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    TextComponent break_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        This is the half-way point of the trials.

        Take a break and press the Spacebar when you are ready to continue.
    KeyboardComponent break_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fin
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        END

        Thank you for taking part in this experiment
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  LoopInitiator prac_loop loopType="TrialHandler"
    loopType = random
    nReps = n_prac
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    Routine practice
  LoopTerminator prac_loop
  Routine end_prac
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 1000
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    Routine trial
    LoopInitiator break_loop loopType="TrialHandler"
      loopType = random
      nReps = break_switch
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      Routine break_screen
    LoopTerminator break_loop
  LoopTerminator trials
  Routine fin
